/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "xml/sawRobotIO1394-ECM-561002.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTMR-31866.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTML-55584.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "ecm-teleop":
    {
        "master-left": "MTML",
        "master-right": "MTMR",
        "slave": "ECM",
        "config-parameter": {
            "rotation": [[1.000, 0.000, 0.000],
                         [0.000, 1.000, 0.000],
                         [0.000, 0.000, 1.000]]
        }

    }
}
