/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM1-3002.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-pro-grasp.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM2-32957.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "xml/sawRobotIO1394-ECM-561002.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTMR-31866.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtmr-deprecated.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTML-55584.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtml-deprecated.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "config-parameter": {
                "rotation": [[-1.0, 0.0, 0.0],
                             [0.0, -1.0, 0.0],
                             [0.0, 0.0, 1.0]]
                }
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "config-parameter": {
                "rotation": [[-1.0, 0.0, 0.0],
                             [0.0, -1.0, 0.0],
                             [0.0, 0.0, 1.0]]
                }
        }
    ]
}
