/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTML-55584.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "xml/sawRobotIO1394-MTMR-31866.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "xml/sawRobotIO1394-ECM-561002.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
    ]
}
