/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM1-3002.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "xml/sawRobotIO1394-PSM2-32957.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        
    ]
}
